PsychoPy2experiment version="2021.2.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = hPrisma Projector
  Screen = 0
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = SoundCheck
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Routines
  Routine Instructions
    TextComponent instructions_text
      disabled = True
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 36
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      text:
        --- Sound Level Check ---

        Adjust the volume of the soundtrack until
        you can hear it clearly above the scanner noise.

        1 : Quieter   2 : Louder   4 : Exit

        Press 1 to continue
    KeyboardComponent instructions_continue
      allowedKeys = '1'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WaitForTrigger
    KeyboardComponent trigger_key
      allowedKeys = '5'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PlayAndAdjust
    SoundComponent sound_clip
      sound = A
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      volume [set every frame] = volume.value
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    SliderComponent volume
      forceEndRoutine = False
      granularity = 10
      initVal = 50
      labels = ("0%", "50%", "100%")
      letterHeight = 0.05
      pos = (0, -0.0)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 50, 100)
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    KeyboardComponent exit_key
      allowedKeys = '4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent adjust
      allowedKeys = '1', '2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent keypress
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()
        if keys:
            print(keys)
Flow
  Routine Instructions
  Routine WaitForTrigger
  Routine PlayAndAdjust
